<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="Ascension 3D Guidance trackSTAR for Linux" 
      Description="Custom Ascension 3D Guidance trakSTAR driver for Linux. Run OpenIGTLink application with argument -p 18945" />
    <Device
      Id="TrackerDevice"
      Type="OpenIGTLinkTracker"
      MessageType="TRANSFORM"
      TrackerInternalCoordinateSystemName="Reference"
      ToolReferenceFrame="Reference"
      ServerAddress="127.0.0.1"
      ServerPort="18945"
      IgtlMessageCrcCheckEnabled="true"
      AcquisitionRate="20"
      ReconnectOnReceiveTimeout="false" >
      <DataSources>
        <DataSource Type="Tool" Id="ReferenceStar" />
        <DataSource Type="Tool" Id="Pointer" />
        <DataSource Type="Tool" Id="Ultrasound" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="ReferenceStar" />
          <DataSource Id="Pointer" />
          <DataSource Id="Ultrasound" />
        </OutputChannel>
      </OutputChannels>
    </Device>
</PlusConfiguration>
